PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.1
  Window size (pixels) = [600, 400]
  expName = habituation
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    ImageComponent target_stim
      image = /Users/jjm/sci/memobaby/task_habituation/stimuli/images/target_transparent_background.png
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code_habit_rule
      Code Type = Auto->JS
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      Begin Experiment:
        looktimes = []
      Begin Routine:
        i = trials.thisN
        print(f"Running trial {i}")
      Each Frame:
        # get response time and key pressed
        if key_resp.keys:
            rt = key_resp.rt
            looktimes.append(rt)
            print(f"Registered key press: {_key_resp_allKeys[-1].name}")
      End Routine:
        print(f"Looking time in trial {i}: {looktimes[i]} s")

        # calculate baseline looking time from first three trials
        if i == 2:
            baseline_looktime = (looktimes[0] + looktimes[1] + looktimes[2]) / 2
            print(f"Baseline looking time is: {baseline_looktime} s")
        # compare recent looking times to baseline and determine if experiment is finished
        if i >= 5:
            sum_last_three_looktimes = (looktimes[i-2] + looktimes[i-1] + looktimes[i])
            print(f"Cumulative looking time is: {sum_last_three_looktimes} s")
            if sum_last_three_looktimes < baseline_looktime:
                trials.finished = True
  Routine attention_grabber
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    DotsComponent moving_dots
      coherence = 1.0
      color = $[-1.0,-1.0,0.8]
      dir = 0.0
      dotLife = 40
      dotSize = 5000
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = (0.6, 0.6)
      nDots = 25
      noiseDots = walk
      refreshDots = none
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 2.0
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    SoundComponent boing_sound
      sound = /Users/jjm/sci/memobaby/task_habituation/stimuli/sounds/boing.mp3
      startVal [time (s)] = 2.0
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    KeyboardComponent key_resp_attention
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent loop_boing_sound
      Code Type = Auto->JS
      Begin Routine:
        #start sound
        #boing = sound.Sound('/Users/jjm/sci/memobaby/task_habituation/stimuli/sounds/boing.mp3', loops=10, name = 'boing')
        #boing.setVolume(1.0)
        #core.wait(2.0)
        #boing_sound.play(loops=3)
  Routine new_stim
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    ImageComponent new_stim_rabbit
      image = /Users/jjm/sci/memobaby/task_habituation/stimuli/images/rabbit_transparent_background.png
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_new_stim
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_screen
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    TextboxComponent end_text
      bold = False
      editable = False
      letterHeight = 0.04
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Das Ende des Experiments wurde erreicht.

        Vielen Dank für Ihre Teilnahme.
  Routine start_screen
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    TextboxComponent task_title
      bold = True
      color = black
      editable = False
      letterHeight = 0.08
      pos = (0, 0.25)
      size = (1, 0.2)
      startVal [time (s)] = 0.0
      text = Habituation Task
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    TextboxComponent start_instruction
      bold = False
      color = black
      editable = False
      letterHeight = 0.04
      size = (0.8, 0.25)
      startVal [time (s)] = 0.0
      text = To START press SPACE
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    TextboxComponent author_info
      alignment = top-left
      bold = False
      color = black
      editable = False
      letterHeight = 0.02
      pos = (0.8, -0.4)
      size = (0.8, 0.25)
      startVal [time (s)] = 0.0
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      text:
        Task script by
            Johannes Julius Mohn
            Joseph Ventura Kieninger
        Based on a task by
            Caspar Addyman
        Developed in PsychoPy v2024.1.1
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine start_screen
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 12
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    Routine trial
    Routine attention_grabber
  LoopTerminator trials
  Routine new_stim
  Routine end_screen
